PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1440, 900]
  expName = manipulation-of-belief
  keyboardBackend = PsychToolbox
  measureFrameRate = False
  runMode = 0
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Routines
  Routine SAM_2
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    ImageComponent question_sam_2
      image = stimuli/sam-2.png
      startVal [time (s)] = 0.0
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    KeyboardComponent rating_sam_2
      allowedKeys = '1','2','3','4','5','6','7','8','9'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SAM_1
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    ImageComponent question_sam_1
      image = stimuli/sam-1.png
      startVal [time (s)] = 0.0
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    KeyboardComponent rating_sam_1
      allowedKeys = '1','2','3','4','5','6','7','8','9'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SAM_3
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    ImageComponent question_sam_3
      image = stimuli/sam-3.png
      startVal [time (s)] = 0.0
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    KeyboardComponent rating_sam_3
      allowedKeys = '1','2','3','4','5','6','7','8','9'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine video
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    MovieComponent video_stimuli
      backend = ffpyplayer
      forceEndRoutine = True
      movie [set every repeat] = $video_file
      startVal [time (s)] = 0.0
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    PolygonComponent fixation_cross
      fillColor = -0.1765, -0.1765, -0.1765
      shape = cross
      size = (30,30)
      startVal [time (s)] = 0.0
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    KeyboardComponent skip_video
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine questionnaire
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    FormComponent questionnaire_form
      Data Format = rows
      Font = Arial
      Item Padding = 0.02
      Items = variables/questionnaire_form.xlsx
      Randomize = False
      Style = dark
      Text Height = 0.01
      itemColor = white
      markerColor = red
      responseColor = white
      startVal [time (s)] = 0.0
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    KeyboardComponent questionnaire_done
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine preparation
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    CodeComponent load_design
      Code Type = Py
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      Begin Experiment:
        import csv

        stimuli_design = []
        with open('variables/subjects_design.csv', 'r') as csvfile:
            reader = csv.DictReader(csvfile)
            for row in reader:
                stimuli_design.append(row)

        subj_num = int(expInfo['participant'])
        selected_order = stimuli_design[subj_num]
        print(f"Subject {subj_num} - selected order: {selected_order}")
      Begin Routine:
        video_file = 'stimuli/' + selected_order[f'video{video_index}']
        label_text = selected_order[f'label{video_index}']
    TextComponent video_nature_type
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every frame] = $"The next video is going to be " + str(label_text) + "\n\n" + str(5-int(t))
      units = norm
      wrapWidth = 1.8
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  Routine instructions
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    TextComponent text_norm
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Any text

        including line breaks

        This text component is white, so change the colour if you have a white background. It does not save the onset and offset time, but has been left justified with a wrap width of 1.8 norm units.

        Press the spacebar to continue
    KeyboardComponent key_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
Flow
  Routine instructions
  LoopInitiator stimuli loopType="TrialHandler"
    conditionsFile = variables/stimuli.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('video_index', np.int64(1))]),
      OrderedDict([('video_index', np.int64(2))]),
      OrderedDict([('video_index', np.int64(3))]),
      OrderedDict([('video_index', np.int64(4))])]
    Routine preparation
    Routine video
    Routine SAM_1
    Routine SAM_2
    Routine SAM_3
  LoopTerminator stimuli
  Routine questionnaire
